PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 3.2.4
  Window size (pixels) = [1440, 900]
  expName = image_exp
  logging level = debug
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Routines
  Routine trial
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        thisExpResult = data.ExperimentHandler(name=expName, version='1.0.1',
                                               extraInfo=expInfo, runtimeInfo=None,
                                               dataFileName='{}_responses'.format(filename))
      Begin Routine:
        # keep track of what/how many letters have been clicked:
        clicked_animals = []
        clicked_objects = []
        clickable_stimuli = []

        for stim in to_draw:
            stim.setOpacity(1)
            stim.setColor([1, 1, 1])
            if stim.name != 'ref':
                clickable_stimuli.append(stim)
      Each Frame:
        for stim in to_draw:
            stim.draw()

        # using your actual stimulus names, check each one for a click:
        for letter_stim in clickable_stimuli:
            # only respond if a letter has not already been clicked:
            if mouse.isPressedIn(letter_stim) and letter_stim.opacity == 1:
                letter_stim.setOpacity(0.5)
                letter_stim.setColor([0.136, 0.140, 0.141], 'rgb')
                clicked_animals.append(letter_stim.image.split('/')[-1].split('.')[0])
                clicked_objects.append(letter_stim.name)

        if len(set(clicked_objects)) == NUM_STIMULI_IN_SURROUND:
            x, y = mouse.getPos()
            mouse.setPos((0, 0))
            continueRoutine = False
      End Routine:
        trial = trials.thisTrial
        for key in trial:
            thisExpResult.addData(key, trial[key])
        thisExpResult.addData('clicks', clicked_objects)
        thisExpResult.addData('clicked_stimuli', clicked_animals)
        thisExpResult.nextEntry()
        number += 1 # next trial
    TextComponent page_num
      letterHeight = 0.5
      pos = (34, -12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $number
      units = deg
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  Routine instructions
    TextComponent instructions_msg
      letterHeight = 0.03
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
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      text:
        Please click the stimuli in the circle in order of similarity to the stimulus in the center, the reference.

        As you click, the stimuli will gray out.
        You cannot undo clicks.
        Click the stimulus most similar to the reference first and least similar stimulus last.

        Press spacebar to continue to task
    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Code Type = Py
  Routine goodbye
    TextComponent thank_you
      letterHeight = 0.03
      pos = (0.7, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Thank you for your time. :)
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  Routine preload
    TextComponent loading_msg
      letterHeight = 0.03
      pos = (0.65, 0)
      startVal [time (s)] = 0.0
      text [set every frame] = $status
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    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        import glob
        import yaml

        status = ''
      Begin Routine:
        with open('../config.yaml', "r") as stream:  # Read in directory containing stimulus set of images
            exp_config = yaml.safe_load(stream)
            PATH_TO_STIMULI = exp_config['files']
            IMAGE_SIZE = exp_config['image_size']

        image_files = glob.glob('{}/*.png'.format(PATH_TO_STIMULI))
        if len(image_files) == 0:
            image_files = glob.glob('{}/*.jpeg'.format(PATH_TO_STIMULI))
        stimulus_objects = {}
        done = False
        for image_file in image_files:
            image_name = image_file.split('/')[-1].split('.')[0]
            stimulus_objects[image_name] = visual.ImageStim(win=win,
                                            size=[IMAGE_SIZE, IMAGE_SIZE],
                                            units='pix',
                                            image=image_file,
                                            opacity=1)
        done = True
      Each Frame:
        if done:
            status = 'Loading complete!\nYou may press the spacebar to continue'
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine hello
    TextComponent start_up
      letterHeight = 0.03
      pos = (0.7, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Please wait while images load…
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  Routine initialize_stimuli
    CodeComponent code_4
      Code Type = Py
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      Begin Experiment:
        from psychopy.clock import StaticPeriod
        import math

        with open('../config.yaml', "r") as stream:  # Read in directory containing stimulus set of images
            exp_config = yaml.safe_load(stream)
            NUM_STIMULI_IN_SURROUND = exp_config['num_images_per_trial']
            DISPLAY_RADIUS = exp_config['display_radius']

        theta_interval = (2 * math.pi)/NUM_STIMULI_IN_SURROUND
        number = 1
        r0 = DISPLAY_RADIUS #250.8
        r = DISPLAY_RADIUS * math.cos(theta_interval) #177.3

        stim_locations = {'ref': (0, 0)}
        for _i in range(NUM_STIMULI_IN_SURROUND):
            angle = theta_interval*_i
            stim_locations['stim'+str(_i+1)] = (r0*cos(angle), r0*sin(angle))

        #stim_locations = {
        #    'stim1': (r0, 0),
        #    'stim2': (r, r),
        #    'stim3': (0, r0),
        #    'stim4': (-r, r),
        #    'stim5': (-r0, 0),
        #    'stim6': (-r, -r),
        #    'stim7': (0, -r0),
        #    'stim8': (r, -r),
        #    'ref': (0, 0)
        #}
        #
      Begin Routine:
        ISI = StaticPeriod(screenHz=60)
        trial = trials.thisTrial
        to_draw = []

        ISI.start(0.5)  # start a period of 0.5s
        for key in trial:
            if key != 'number':
                image = trial[key]
                stimulus_objects[image].pos = stim_locations[key]
                stimulus_objects[image].name = key
                to_draw.append(stimulus_objects[image])
        ISI.complete()  # finish the 0.5s, taking into account one 60Hz frame
Flow
  Routine hello
  Routine preload
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('number', 1), ('ref', 'ladybug'), ('stim1', 'sheep'), ('stim2', 'pigeon'), ('stim3', 'turkey'), ('stim4', 'snake'), ('stim5', 'cow'), ('stim6', 'rat'), ('stim7', 'snail'), ('stim8', 'monkey')]),
      OrderedDict([('number', 2), ('ref', 'frog'), ('stim1', 'turtle'), ('stim2', 'pigeon'), ('stim3', 'ant'), ('stim4', 'giraffe'), ('stim5', 'whale'), ('stim6', 'horse'), ('stim7', 'dolphin'), ('stim8', 'duck')]),
      OrderedDict([('number', 3), ('ref', 'butterfly'), ('stim1', 'monkey'), ('stim2', 'turkey'), ('stim3', 'lizard'), ('stim4', 'shark'), ('stim5', 'bat'), ('stim6', 'whale'), ('stim7', 'crocodile'), ('stim8', 'turtle')]),
      OrderedDict([('number', 4), ('ref', 'whale'), ('stim1', 'goat'), ('stim2', 'frog'), ('stim3', 'sparrow'), ('stim4', 'tiger'), ('stim5', 'bluebird'), ('stim6', 'crocodile'), ('stim7', 'snake'), ('stim8', 'elephant')]),
      OrderedDict([('number', 5), ('ref', 'eagle'), ('stim1', 'turkey'), ('stim2', 'cow'), ('stim3', 'sparrow'), ('stim4', 'cat'), ('stim5', 'hog'), ('stim6', 'turtle'), ('stim7', 'snail'), ('stim8', 'frog')]),
      OrderedDict([('number', 6), ('ref', 'goldfish'), ('stim1', 'tiger'), ('stim2', 'horse'), ('stim3', 'bat'), ('stim4', 'rat'), ('stim5', 'bear'), ('stim6', 'fox'), ('stim7', 'owl'), ('stim8', 'giraffe')]),
      OrderedDict([('number', 7), ('ref', 'crocodile'), ('stim1', 'rat'), ('stim2', 'ant'), ('stim3', 'snake'), ('stim4', 'giraffe'), ('stim5', 'bluebird'), ('stim6', 'snail'), ('stim7', 'horse'), ('stim8', 'owl')])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
    Routine initialize_stimuli
    Routine trial
  LoopTerminator trials
  Routine goodbye
